OpenViBE-Scenario
Comment
  Configurable box
Comment
  Take 10.0 seconds
   ( output each 0.5 sec and began from 2.0 sec)
  2.0 2.5 3.0 3.5 4.0 4.5 5.0 5.5 6.0 6.5 7.0 7.5 8.0 8.5 9.0 9.5 10.0

Start => #0
  Filename = ${Player_ScenarioDirectory}/settingtxt/simple-keyboard-to-stimulations.txt
-> UDP Sender (Experimental Start & Stop)
  Host = localhost
  Port = 20324
#0 -> SSVEP Training Controller => #2
  Lua Script = ${Player_ScenarioDirectory}/scripts/[2] SSVEP-stimulus-generator.lua
  Goal sequence = 1 2 3 4
  Stimulation duration = 10
  Break duration = 3
  Flickering delay = 2.000000
#2.Stimulations -> Stimulation Filter (VisualStimulation Start&Stop)
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_VisualStimulationStart
  Stimulation range end = OVTK_StimulationId_VisualStimulationStop
-> UDP Sender (VisualStimulation Start&Stop)
  Host = localhost
  Port = 20326
#2.New output -> UDP Sender (Target Number)
  Host = localhost
  Port = 20322
Input stimulations 1=#0, Input stimulations 2=#2.Stimulations, Input stimulations 3=#2.New output -> Stimulation multiplexer => #6
Generic stream reader => #7
  Filename = ${Player_ScenarioDirectory}/[5] ExperimentalSingalFiles/[2015.12.15-15.37.28]rawssvepsignal-record.ov
#7.Output stream 2 -> Identity => #8
Input stream 2=#8, Input stream 3=#6 -> (Raw signal) Generic stream writer
  Filename = ${Player_ScenarioDirectory}/[2] AcquiredSignalFiles/[$core{date}-$core{time}]rawssvepsignal-record.ov
  Use compression = false
Data=#8 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input signal=#8, Input stimulations=#2.Stimulations -> Stimulation based epoching => #11
  Epoch duration (in sec) = 10.00000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_VisualStimulationStart
#11.Epoched signal -> (During Trial) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[2] AcquiredSignalFiles/[$core{date}-$core{time}]ssvepsignal-record.csv
  Column separator = ;
  Precision = 10
#11.Epoched signal -> Spatial Filter "Average"
  Spatial filter coefficients = 1;1;1;1;1;1;1;1;1;1;1;1
  Number of output channels = 1
  Number of input channels = 12
  Filter matrix file =
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 6.000000
  High cut frequency (Hz) = 40.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Spectral analysis => #17
  Spectral components = Amplitude
#17.Amplitude -> FFT of average signal
  Minimum frequency to display = 0
  Maximum frequency to display = 40
#17.Amplitude -> (FFT spectral) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[2] AcquiredSignalFiles/[$core{date}-$core{time}]fftspectral-record.csv
  Column separator = ;
  Precision = 10

Acquisition client => #20
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#20.Signal stream -> Channel Selector "5;6;7;8;9;10"
  Channel List = 5;6;7;8;9;10
  Action = Select
  Channel Matching Method = Smart
