OpenViBE-Scenario
Comment
  Configurable box

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Start
  Filename = ${Player_ScenarioDirectory}/settingtxt/simple-keyboard-to-stimulations.txt
-> SSVEP Training Controller => #2
  Lua Script = ${Player_ScenarioDirectory}/scripts/[2] SSVEP-stimulus-generator.lua
  Goal sequence = 1 2 3 4 1 2 3 4 1 2 3 4
  Stimulation duration = 10
  Break duration = 4
  Flickering delay = 2.000000
#2.Stimulations -> 0xc73e83ec Identity => #3
Input 1=#3, Input 2=#3, Input 3=#3, Input 4=#3, Input 5=#3 -> 0xc73e83ec Button VRPN Server "Stimulator Control"
  Peripheral name = SSVEP_VRPN_StimulatorControl
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
  Button 3 ON = OVTK_StimulationId_VisualStimulationStart
  Button 3 OFF = OVTK_StimulationId_VisualStimulationStart
  Button 4 ON = OVTK_StimulationId_VisualStimulationStop
  Button 4 OFF = OVTK_StimulationId_VisualStimulationStop
  Button 5 ON = OVTK_GDF_Feedback_Continuous
  Button 5 OFF = OVTK_GDF_End_Of_Trial
#2.New output -> 0xc73e83ec Identity => #5
Input 1=#5, Input 2=#5, Input 3=#5, Input 4=#5, Input 5=#5, Input 6=#5, Input 7=#5 -> 0xc73e83ec Button VRPN Server "Target Select"
  Peripheral name = SSVEP_VRPN_Target
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_01
  Button 2 OFF = OVTK_StimulationId_Label_01
  Button 3 ON = OVTK_StimulationId_Label_02
  Button 3 OFF = OVTK_StimulationId_Label_02
  Button 4 ON = OVTK_StimulationId_Label_03
  Button 4 OFF = OVTK_StimulationId_Label_03
  Button 5 ON = OVTK_StimulationId_Label_04
  Button 5 OFF = OVTK_StimulationId_Label_04
  Button 6 ON = OVTK_StimulationId_Label_05
  Button 6 OFF = OVTK_StimulationId_Label_05
  Button 7 ON = OVTK_StimulationId_Label_06
  Button 7 OFF = OVTK_StimulationId_Label_06
Input stimulations 1=#2.Stimulations, Input stimulations 2=#2.New output -> Stimulation multiplexer => #7
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#7 -> 0xc67a01dc Generic stream writer
  Filename = ${Player_ScenarioDirectory}/[2] AcquiredSignalFiles/ssvep-record-[$core{date}-$core{time}].ov
  Use compression = false
#2.Stimulations -> Stimulation listener "Start&Stop"
  Log level to use = Information
#2.New output -> Stimulation listener "StimurationNumber"
  Log level to use = Information
#2.Stimulations -> UDP Sender
  Host = localhost
  Port = 5678
#2.New output -> UDP Sender
  Host = localhost
  Port = 5679

0xc73e83ec Scenario Control => #13
  Peripheral name = SSVEP_VRPN_StartStop@localhost:${VRPN_ExternalServerPort}
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
#13.Output 2 -> 0xc73e83ec Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop

0xc73e83ec Start Stimulation
  Lua Script = ${Player_ScenarioDirectory}/scripts/start-stimulator.lua
  Delay = 1
-> 0xc73e83ec Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Command 1 = ${External_Application_Launcher} openvibe-ssvep-demo --run-bg trainer
