OpenViBE-Scenario
Comment
  Configurable box

Start => #0
  Filename = ${Player_ScenarioDirectory}/settingtxt/simple-keyboard-to-stimulations.txt
-> UDP Sender Start
  Host = localhost
  Port = 20324
#0 -> SSVEP Training Controller => #2
  Lua Script = ${Player_ScenarioDirectory}/scripts/[2] SSVEP-stimulus-generator.lua
  Goal sequence = 1 2 3 4 1 2 3 4 1 2 3 4
  Stimulation duration = 10
  Break duration = 4
  Flickering delay = 2.000000
Input stimulations 1=#2.Stimulations, Input stimulations 2=#2.New output -> Stimulation multiplexer => #3
#2.Stimulations -> UDP Sender (Start/Stop)
  Host = localhost
  Port = 20326
#2.New output -> UDP Sender (Stimulation Number)
  Host = localhost
  Port = 20322
Acquisition client => #6
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#6.Signal stream -> Channel Selector "5;6;7;8;9;10"
  Channel List = 5;6;7;8;9;10
  Action = Select
  Channel Matching Method = Smart
Input stream 1=#6.Signal stream, Input stream 2=#3 -> Identity => #8
#8.Output stream 1 -> Identity => #9
-> Spatial Filter 1
  Spatial Filter Coefficients = -7.831878e-002 -1.298724e-001 1.514725e-001 -4.919546e-001 -8.040827e-002 -4.031377e-002 -1.036721e-001 7.944795e-001 2.776373e-004 -1.650207e-002 -1.013357e-001 2.268445e-001 1.812319e-002 -3.087814e-001 -5.656761e-001 -3.004974e-001 -1.613332e-001 2.760015e-001 5.737479e-001 -1.068685e-001 1.856993e-001 1.283123e-001 6.051049e-004 -1.661579e-002
  Number of Output Channels = 2
  Number of Input Channels = 12
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3] CSPTrainingFiles/csp-1.cfg
-> Temporal filter "Frequency 1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 19
  High cut frequency (Hz) = 21
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1] TemporalFilterFreq/temporal-filter-freq-1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor 1 => #17
  Filename to load configuration from = ${Player_ScenarioDirectory}/[4] ClassifierFiles/classifier-1.cfg
#17.Labels -> Stimulation listener "Classifier processor 1"
  Log level to use = Information
#9 -> Spatial Filter 2
  Spatial Filter Coefficients = 1.888445e-001 -3.881107e-001 4.054893e-001 -2.611682e-002 -1.965808e-001 1.699183e-001 -1.624194e-002 -2.572215e-001 -1.332766e-001 3.951460e-001 -4.931747e-001 3.123092e-001 -1.105532e-002 -7.808432e-003 -4.252959e-001 -2.326771e-001 -8.312392e-003 3.277885e-002 8.929797e-002 -1.170533e-001 -2.068234e-002 -3.887460e-002 -1.748447e-001 8.423021e-001
  Number of Output Channels = 2
  Number of Input Channels = 12
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3] CSPTrainingFiles/csp-2.cfg
-> Temporal filter "Frequency 2"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 14
  High cut frequency (Hz) = 16
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1] TemporalFilterFreq/temporal-filter-freq-2.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor 2 => #26
  Filename to load configuration from = ${Player_ScenarioDirectory}/[4] ClassifierFiles/classifier-2.cfg
#26.Labels -> Stimulation listener "Classifier processor 2"
  Log level to use = Information
#9 -> Spatial Filter 3
  Spatial Filter Coefficients = 6.317646e-002 -2.789441e-001 -2.758524e-001 1.427637e-001 3.253396e-002 2.262662e-001 -5.321258e-002 -4.314417e-001 4.594981e-001 1.112346e-001 -4.714637e-001 3.670214e-001 -1.676887e-002 -2.124136e-002 -5.482119e-001 -2.754025e-001 1.185241e-001 -3.424090e-003 9.205367e-002 -3.674768e-003 -5.714076e-002 -6.525724e-002 -5.893813e-002 7.676851e-001
  Number of Output Channels = 2
  Number of Input Channels = 12
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3] CSPTrainingFiles/csp-3.cfg
-> Temporal filter "Frequency 3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 11
  High cut frequency (Hz) = 13
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1] TemporalFilterFreq/temporal-filter-freq-3.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor 3 => #35
  Filename to load configuration from = ${Player_ScenarioDirectory}/[4] ClassifierFiles/classifier-3.cfg
#35.Labels -> Stimulation listener "Classifier processor 3"
  Log level to use = Information
#9 -> Spatial Filter 4
  Spatial Filter Coefficients = -8.621440e-002 -1.809979e-001 -3.881215e-001 -1.663291e-001 2.608830e-001 2.273308e-001 -1.092756e-001 -7.784745e-002 -1.386216e-001 -1.233542e-001 1.828342e-002 7.803820e-001 6.921070e-002 -1.696863e-001 2.606043e-001 -2.681394e-001 2.738859e-001 -5.655438e-001 -3.072228e-001 4.382787e-001 -5.642279e-002 -2.022363e-001 1.323554e-001 2.892659e-001
  Number of Output Channels = 2
  Number of Input Channels = 12
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/[3] CSPTrainingFiles/csp-4.cfg
-> Temporal filter "Frequency 4"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 9
  High cut frequency (Hz) = 11
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/[1] TemporalFilterFreq/temporal-filter-freq-4.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor 4 => #44
  Filename to load configuration from = ${Player_ScenarioDirectory}/[4] ClassifierFiles/classifier-4.cfg
#44.Labels -> Stimulation listener "Classifier processor 4"
  Log level to use = Information
New input[0]=#17.Labels, New input[1]=#26.Labels, New input[2]=#35.Labels, New input[3]=#44.Labels -> SSVEP Voter => #46
  Lua Script = ${Player_ScenarioDirectory}/scripts/[5] ssvep-combination-classifier.lua
  Class count = 4
-> UDP Sender (Result)
  Host = localhost
  Port = 20323
#46 -> 0xc73e83ec Stimulation Filter (Result)
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_06
-> 0xc73e83ec UDP Sender
  Host = localhost
  Port = 20323
#46 -> Stimulation listener "Result SSVEP Voter"
  Log level to use = Information
#8.Output stream 1 -> Spatial Filter "Average"
  Spatial filter coefficients = 1;1;1;1;1;1;1;1;1;1;1;1
  Number of output channels = 1
  Number of input channels = 12
  Filter matrix file =
-> Temporal filter => #52
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 6.000000
  High cut frequency (Hz) = 40.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Spectral analysis => #55
  Spectral components = Amplitude
#55.Amplitude -> Identity => #56
-> Generic stream writer "(FFT spectral) Generic steram writer"
  Filename = ${Player_ScenarioDirectory}/[5] ExperimentalSingalFiles/[$core{date}-$core{time}]fftspectral-record.ov
  Use compression = false
#56 -> (FFT spectral) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[5] ExperimentalSingalFiles/[$core{date}-$core{time}]fftspectral-record.csv
  Column separator = ;
  Precision = 10
#55.Amplitude -> FFT of average signal
  Minimum frequency to display = 0
  Maximum frequency to display = 40
Input stream 2=#52 -> (Averaged&Filtered signal) Generic stream writer
  Filename = ${Player_ScenarioDirectory}/[5] ExperimentalSingalFiles/[$core{date}-$core{time}]averaged-ssvep-record.ov
  Use compression = false
#52 -> (Averaged&Filtered signal) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[5] ExperimentalSingalFiles/[$core{date}-$core{time}]averaged-ssvep-record.csv
  Column separator = ;
  Precision = 10
Data=#52 -> Signal display "Filtered"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Data=#8.Output stream 1, Stimulations=#8.Output stream 2 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input stream 2=#8.Output stream 1, Input stream 3=#8.Output stream 2 -> (Raw signal) Generic stream writer
  Filename = ${Player_ScenarioDirectory}/[5] ExperimentalSingalFiles/[$core{date}-$core{time}]rawssvepsignal-record.ov
  Use compression = false
#8.Output stream 1 -> (Raw signal) CSV File Writer
  Filename = ${Player_ScenarioDirectory}/[5] ExperimentalSingalFiles/[$core{date}-$core{time}]rawssvepsignal-record.csv
  Column separator = ;
  Precision = 10

Generic stream reader
  Filename = ${Player_ScenarioDirectory}/[2] AcquiredSignalFiles/[2015.12.15-15.20.04]rawssvepsignal-record.ov
  0x8d21ff41 = ${Player_ScenarioDirectory}/[2] AcquiredSignalFiles/[3] AcquiredSignal.cfg

Generic stream reader "Sample SSVEP Signal Stream"
  Filename = C:/Users/Takumi Kodama/Dropbox/OpenViBE(Graz)/SSVEP-TK/[2] AcquiredSignalFiles/(sample)bci-ssvep-training.ov

0xc73e83ec Voting Classifier
  Number of repetitions = 10
  Target class label = OVTK_StimulationId_Label_01
  Non target class label = OVTK_StimulationId_Label_02
  Reject class label = OVTK_StimulationId_Label_00
  Result class label base = OVTK_StimulationId_Label_01
  Choose one if ex-aequo = true
-> 0xc73e83ec Stimulation listener "Result Voting Classifier"
  Log level to use = Information
